<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: Tracking the da Vinci robot using OpenIGTLink and the da Vinci API" 
      Description="Test broadcasting tool tracking data through TCP/IP connection and ISI API."
    />
    <Device
      Id="TrackerDevice"
      Type="IntuitiveDaVinci"
      ToolReferenceFrame=""
      AcquisitionRate="100"
      Psm1DhTable="
        1.0   0.0     1.0   0.0   0.0       1.0   0.0 
        1.0   0.0     -1.0  0.0  0.0       -1.0  0.0 
        2.0   0.0     1.0   0.0   -479.313  0.0    1.0
        1.0   0.0     0.0    1.0    467.000   0.0    1.0
        1.0   0.0     -1.0  0.0  0.0       -1.0  0.0 
        1.0   8.9916  -1.0  0.0  0.0       -1.0  0.0 
        0.0   0.0     -1.0  0.0  9.652     0.0    1.0"
      Psm2DhTable="
        1.0   0.0     1.0   0.0   0.0       1.0   0.0 
        1.0   0.0     -1.0  0.0  0.0       -1.0  0.0 
        2.0   0.0     1.0   0.0   -479.313  0.0    1.0
        1.0   0.0     0.0    1.0    467.000   0.0    1.0
        1.0   0.0     -1.0  0.0  0.0       -1.0  0.0 
        1.0   8.9916  -1.0  0.0  0.0       -1.0  0.0 
        0.0   0.0     -1.0  0.0  9.652     0.0    1.0"
      EcmDhTable="
        1.0   0.0     1.0   0.0   0.0       1.0   0.0 
        1.0   0.0     -1.0  0.0  0.0       -1.0  0.0 
        2.0   0.0     1.0   0.0   -382.2    0.0    1.0
        1.0   0.0     0.0    1.0    382.9     0.0    1.0
        0.0   0.0     -1.0  0.0  0.0       -1.0  0.0 
        0.0   0.0     -1.0  0.0  0.0       -1.0  0.0 
        0.0   0.0     -1.0  0.0  0.0       0.0    1.0"
      Password="">
      
      <DataSources>
        <DataSource Type="Tool" Id="psm1BaseToWorld" PortName="psm1BaseToWorld"/>
        <DataSource Type="Tool" Id="psm2BaseToWorld" PortName="psm2BaseToWorld"/>
        <DataSource Type="Tool" Id="ecmBaseToWorld" PortName="ecmBaseToWorld"/>
        
        <DataSource Type="Tool" Id="psm1Frame1ToBase" PortName="psm1Frame1ToBase"/>
        <DataSource Type="Tool" Id="psm1Frame2ToBase" PortName="psm1Frame2ToBase"/>
        <DataSource Type="Tool" Id="psm1Frame3ToBase" PortName="psm1Frame3ToBase"/>
        <DataSource Type="Tool" Id="psm1Frame4ToBase" PortName="psm1Frame4ToBase"/>
        <DataSource Type="Tool" Id="psm1Frame5ToBase" PortName="psm1Frame5ToBase"/>
        <DataSource Type="Tool" Id="psm1Frame6ToBase" PortName="psm1Frame6ToBase"/>
        <DataSource Type="Tool" Id="psm1Frame7ToBase" PortName="psm1Frame7ToBase"/>
        
        <DataSource Type="Tool" Id="psm2Frame1ToBase" PortName="psm2Frame1ToBase"/>
        <DataSource Type="Tool" Id="psm2Frame2ToBase" PortName="psm2Frame2ToBase"/>
        <DataSource Type="Tool" Id="psm2Frame3ToBase" PortName="psm2Frame3ToBase"/>
        <DataSource Type="Tool" Id="psm2Frame4ToBase" PortName="psm2Frame4ToBase"/>
        <DataSource Type="Tool" Id="psm2Frame5ToBase" PortName="psm2Frame5ToBase"/>
        <DataSource Type="Tool" Id="psm2Frame6ToBase" PortName="psm2Frame6ToBase"/>
        <DataSource Type="Tool" Id="psm2Frame7ToBase" PortName="psm2Frame7ToBase"/>
        
        <DataSource Type="Tool" Id="ecmFrame1ToBase" PortName="ecmFrame1ToBase"/>
        <DataSource Type="Tool" Id="ecmFrame2ToBase" PortName="ecmFrame2ToBase"/>
        <DataSource Type="Tool" Id="ecmFrame3ToBase" PortName="ecmFrame3ToBase"/>
        <DataSource Type="Tool" Id="ecmFrame4ToBase" PortName="ecmFrame4ToBase"/>
        <DataSource Type="Tool" Id="ecmFrame5ToBase" PortName="ecmFrame5ToBase"/>
        <DataSource Type="Tool" Id="ecmFrame6ToBase" PortName="ecmFrame6ToBase"/>
        <DataSource Type="Tool" Id="ecmFrame7ToBase" PortName="ecmFrame7ToBase"/>
      </DataSources>
      
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource  Id="psm1BaseToWorld" />
          <DataSource  Id="psm2BaseToWorld" />
          <DataSource  Id="ecmBaseToWorld" />
          
          <DataSource  Id="psm1Frame1ToBase" />
          <DataSource  Id="psm1Frame2ToBase" />
          <DataSource  Id="psm1Frame3ToBase" />
          <DataSource  Id="psm1Frame4ToBase" />
          <DataSource  Id="psm1Frame5ToBase" />
          <DataSource  Id="psm1Frame6ToBase" />
          <DataSource  Id="psm1Frame7ToBase" />
          
          <DataSource  Id="psm2Frame1ToBase" />
          <DataSource  Id="psm2Frame2ToBase" />
          <DataSource  Id="psm2Frame3ToBase" />
          <DataSource  Id="psm2Frame4ToBase" />
          <DataSource  Id="psm2Frame5ToBase" />
          <DataSource  Id="psm2Frame6ToBase" />
          <DataSource  Id="psm2Frame7ToBase" />
          
          <DataSource  Id="ecmFrame1ToBase" />
          <DataSource  Id="ecmFrame2ToBase" />
          <DataSource  Id="ecmFrame3ToBase" />
          <DataSource  Id="ecmFrame4ToBase" />
          <DataSource  Id="ecmFrame5ToBase" />
          <DataSource  Id="ecmFrame6ToBase" />
          <DataSource  Id="ecmFrame7ToBase" />
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>    
  </DataCollection>
  
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="psm1BaseToWorld" />
        <Transform Name="psm2BaseToWorld" />
        <Transform Name="ecmBaseToWorld" />
        
        <Transform Name="psm1Frame1ToBase" />
        <Transform Name="psm1Frame2ToBase" />
        <Transform Name="psm1Frame3ToBase" />
        <Transform Name="psm1Frame4ToBase" />
        <Transform Name="psm1Frame5ToBase" />
        <Transform Name="psm1Frame6ToBase" />
        <Transform Name="psm1Frame7ToBase" />
        
        <Transform Name="psm2Frame1ToBase" />
        <Transform Name="psm2Frame2ToBase" />
        <Transform Name="psm2Frame3ToBase" />
        <Transform Name="psm2Frame4ToBase" />
        <Transform Name="psm2Frame5ToBase" />
        <Transform Name="psm2Frame6ToBase" />
        <Transform Name="psm2Frame7ToBase" />
        
        <Transform Name="ecmFrame1ToBase" />
        <Transform Name="ecmFrame2ToBase" />
        <Transform Name="ecmFrame3ToBase" />
        <Transform Name="ecmFrame4ToBase" />
        <Transform Name="ecmFrame5ToBase" />
        <Transform Name="ecmFrame6ToBase" />
        <Transform Name="ecmFrame7ToBase" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>